CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['scoTo begin creating your project, use the Images module to compile a list of files and/or folders that you want to analyze. You can also specify a set of rules to include only the desired files in your selected folders.']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
    Filter images?:Custom
    Select the rule criteria:and (extension does isimage) (file doesnot contain "(DAPI+GFP") (file doesnot contain "_Brightfield") (file doesnot contain "_meta.xml")

Metadata:[module_num:2|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notes:['The Metadata module optionally allows you to extract information describing your images (i.e, metadata) which will be stored along with your measurements. This information can be contained in the file name and/or location, or in an external file.', '', 'Note: this pipeline works best with a 6-8 h induction period.']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
    Extract metadata?:Yes
    Metadata data type:Choose for each
    Metadata types:{"Date": "none", "FileLocation": "text", "Frame": "integer", "Series": "none"}
    Extraction method count:1
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes

NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:2
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "_DAPI") (file does contain "_c0.tif")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "_GFP") (file does contain "_c1.tif")
    Name to assign these images:GFP
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:Yes
    grouping metadata count:1
    Metadata category:ChannelName

IdentifyPrimaryObjects:[module_num:5|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notes:['Identifies and segregates nuclei by size (40-100 pixels) and shape from the DAPI channel. Uses adaptive Otsu three class (foreground) thresholding. The threshold parameters are set as follows: threshold smoothing scale: 1.3488; threshold correction factor: 1; lower and upper bounds on threshold: 0.01-1.0. Adaptive threshold window is set at 20 pixels.', '']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):80,300
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.005,1.0
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    Log transform before thresholding?:No
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
IdentifySecondaryObjects:[module_num:6|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notes:['Expanding the nucleus by a four pixels to include any foci that may be protruding from the nuclear membrane. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:nuclear_periphery
    Select the method to identify the secondary objects:Distance - N
    Select the input image:DAPI
    Number of pixels by which to expand the primary objects:8
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
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
IdentifySecondaryObjects:[module_num:7|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notes:['Uses adaptive Minimum Cross-Entropy thresholding to outline the cytoplasm around each nucleus using a regularization factor of 0.05. Decreased the lower bounds of the threshold to include a greater level of detail surrounding the cytoplasm. If there are issues with background, try increasing the lower bounds value to 1.0.']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enabled:False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
    Select the input objects:nuclear_periphery
    Name the objects to be identified:tdTomato
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:DsRed
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    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0
    Threshold correction factor:0.7
    Lower and upper bounds on threshold:0.0025,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
EnhanceOrSuppressFeatures:[module_num:8|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notes:['Enhancing the nuclear foci features using speckle features to decrease contributions by background noise. The largest feature size it considers is 15 pixels which should be high enough for the majority of nuclear foci. Can be adjusted as needed.']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
    Select the input image:GFP
    Name the output image:EnhanceMLF2_GFP
    Select the operation:Enhance
    Feature size:8
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:9|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notes:['Identifies and segregates foci anywhere in the cell by size (1 to 15 pixels) and intensity from the GFP channel. Uses adaptive Otsu three class (foreground) thresholding. The threshold parameters are set as follows: threshold smoothing scale: 1.3488; threshold correction factor: 1.2; lower and upper bounds on threshold: 0.04-1.0. Adaptive threshold window is set at 50 pixels.', '', 'Note changed lower bounds from 0.04 (for antibodies) to 0.07 for MLF2-GFP (6 hour induction)', '0.03 for OSMI-1']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
    Select the input image:EnhanceMLF2_GFP
    Name the primary objects to be identified:GFP_foci
    Typical diameter of objects, in pixel units (Min,Max):1,12
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.008,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:80
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    Thresholding method:Otsu

MeasureImageAreaOccupied:[module_num:10|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
    Measure the area occupied by:Objects
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    Select object sets to measure:GFP_foci, Nuclei

MeasureObjectSizeShape:[module_num:11|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
    Select object sets to measure:GFP_foci, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:12|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
    Select images to measure:DAPI, GFP
    Select objects to measure:GFP_foci, Nuclei

MeasureTexture:[module_num:13|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
    Select images to measure:DAPI, GFP
    Select objects to measure:GFP_foci, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Objects
    Texture scale to measure:3

RelateObjects:[module_num:14|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notes:['Returns the number of foci per nucleus']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
    Parent objects:nuclear_periphery
    Child objects:GFP_foci
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:No
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:foci_MLF2
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
OverlayOutlines:[module_num:15|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notes:['Overlays the nuclear foci (green) with the cytoplasmic foci (red).']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:GFP
    Name the output image:overlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:foci_MLF2

SaveImages:[module_num:16|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notes:['Saves image to specified file location. Must input where you would like the images to be saved.']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
    Select the type of image to save:Image
    Select the image to save:overlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:GFP
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:CondenScreen
    Saved file format:jpeg
    Output file location:Default Input Folder sub-folder|Desktop
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToSpreadsheet:[module_num:17|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notes:['Saves Excel to specified file location. Must input where you would like the images to be saved.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Image|ModuleError_05IdentifyPrimaryObjects,Image|ModuleError_11MeasureObjectSizeShape,Image|ModuleError_03NamesAndTypes,Image|ModuleError_13MeasureTexture,Image|ModuleError_01Images,Image|ModuleError_15OverlayOutlines,Image|ModuleError_16SaveImages,Image|ModuleError_08EnhanceOrSuppressFeatures,Image|ModuleError_10MeasureImageAreaOccupied,Image|ModuleError_06IdentifySecondaryObjects,Image|ModuleError_09IdentifyPrimaryObjects,Image|ModuleError_12MeasureObjectIntensity,Image|ModuleError_04Groups,Image|ModuleError_02Metadata,Image|ModuleError_14RelateObjects,Image|Metadata_ChannelName,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:CondenScreen
    Overwrite existing files without warning?:Yes
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